WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindForceForagingDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindForceForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.Rig.AindForceForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindForceForagingDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.AindForceForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
    -> PropertyMapping(Value)
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
    -> Take(Count=1)
    -> AsyncSubject TextureBankPath

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:\data\, Subject=672102, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftHasReward

    BooleanProperty(Value=false)
    -> BehaviorSubject RightHasReward

    BooleanProperty(Value=false)
    -> BehaviorSubject IsBaitedMode

    BooleanProperty(Value=false)
    -> Take(Count=1) => #15
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #18
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #21
    #15, #18, #21 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

Annotation(Text="")
-> GroupWorkflow Hardware
    SubscribeSubject HarpLoadCellsEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
    -> BehaviorSubject HarpTimestampSource

    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.CalibrationDirectory)
        -> PropertyMapping(Directory)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadDisplayCalibration.bonsai, Directory=Calibration\Monitors)
        -> Take(Count=1)
        -> AsyncSubject ScreenCalibration

        SubscribeSubject FarClipHorizon
        -> PropertyMapping(FarClip)
        -> GroupWorkflow RenderLoop
            ExternalizedMapping(FarClip)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderLoop.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject WorldContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast) => #8
            SubscribeSubject WorldContrast => #9
            #8, #9 -> CombineLatest
            -> Multiply
            -> MulticastSubject DisplayContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast)
            -> MulticastSubject DisplayBrightness

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpLoadCellsDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment) => #14
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #17
        #14, #17 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                #5, #8 -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #9
                SubscribeSubject FrameEvent => #10
                #9, #10 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #12
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #14
                #12, #14 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

GroupWorkflow OperationControl
    BehaviorSubject<System.Reactive.Unit> TriggerStartCue
    BehaviorSubject<System.Reactive.Unit> TriggerGoCue
    BehaviorSubject<System.Boolean> TriggerFeedbackCue

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #14
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #15
        #14, #15 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #25
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #6, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #1
        SubscribeSubject TextureBank => #2
        SubscribeSubject TriggeredCamerasReady => #3
        #1, #2, #3 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #9
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
        #9 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
        #11, #14 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

    GroupWorkflow LoadCells
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true)) => #2
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Force)
        -> MemberSelector(Selector=PressMode)
        -> PropertyMapping(PressMode) => #6
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Force)
        -> MemberSelector(Selector=LeftIndex)
        -> PropertyMapping(LeftLoadCellIndex) => #10
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Force)
        -> MemberSelector(Selector=RightIndex)
        -> PropertyMapping(RightLoadCellIndex) => #14
        #2, #6, #10, #14 -> ParseForce(LeftLoadCellIndex=0, RightLoadCellIndex=1, PressMode=Double)
        -> PublishSubject CurrentForce

GroupWorkflow TaskLogic
    SubscribeSubject TaskLogicParameters
    -> GroupWorkflow PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation
        -> ToList => #7
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge
        -> ToList => #11
        #7, #11 -> Merge
        -> WorkflowOutput
    -> AsyncSubject BlockStatistics

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject BlockIndex

    GroupWorkflow BlockSwitchLogic
        SubscribeSubject IsBaitedMode
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject LeftHasReward => #3
        Annotation Reset(Text="Ensure no reward is available if the Baited mode is changed") => #4
        #3, #4 -> MulticastSubject RightHasReward

        SubscribeSubject ActiveBlock => #6
        SubscribeSubject CurrentForce
        -> MemberSelector(Selector=Seconds) => #8
        #6, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> BehaviorSubject BlockEntryTime

    SubscribeSubject BlockStatistics => #7
    SubscribeSubject BlockIndex
    -> PropertyMapping(Value) => #9
    #7, #9 -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> BehaviorSubject ActiveBlock => #12
    -> AindForceForagingDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.Block>)
    -> SelectMany CreateBlock => #14
        WorkflowInput Source1
        -> AsyncSubject ThisBlock

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=Trials)
        -> Merge
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    #12 -> AindForceForagingDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.BlockGenerator>)
    -> SelectMany CreateBlockGenerator => #16
        WorkflowInput Source1
        -> AsyncSubject ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> AsyncSubject TrialBlueprint

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=BlockSize) => #5
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #7
        #5, #7 -> AindForceForagingDataSchema.TaskLogic.SampleDistribution
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> AsyncSubject BlockLength

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject TrialBlueprint
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++ => #17
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        SubscribeSubject BlockLength
        -> PropertyMapping(Count) => #19
        #17, #19 -> RepeatCount(Count=0)
        -> Last
        -> WorkflowOutput
    #12 -> AindForceForagingDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.BrownianRandomWalk>)
    -> SelectMany CreateRandomWalk => #18
        WorkflowInput Source1
        -> AsyncSubject ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> AsyncSubject TrialBlueprint
        -> BehaviorSubject CurrentTrial

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=BlockSize) => #6
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #8
        #6, #8 -> AindForceForagingDataSchema.TaskLogic.SampleDistribution
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> AsyncSubject BlockLength

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject CurrentTrial
        -> Take(Count=1)
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Merge
        -> SelectMany UpdateNextTrial => #19
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialOutcome

            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber

            SubscribeSubject CurrentTrial
            -> MemberSelector(Selector=RightHarvest)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> IncludeWorkflow(Path=Extensions\UpdateAction.bonsai)
            -> AsyncSubject RightAction

            SubscribeSubject CurrentTrial
            -> MemberSelector(Selector=LeftHarvest)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> IncludeWorkflow(Path=Extensions\UpdateAction.bonsai)
            -> AsyncSubject LeftAction

            SubscribeSubject LeftAction => #17
            SubscribeSubject RightAction => #18
            #17, #18 -> Zip
            -> LastOrDefault => #20
            SubscribeSubject CurrentTrial
            -> PropertyMapping => #22
              InterTrialInterval(Selector=InterTrialInterval)
              QuiescencePeriod(Selector=QuiescencePeriod)
              InitiationPeriod(Selector=InitiationPeriod)
              ResponsePeriod(Selector=ResponsePeriod)
            SubscribeSubject LeftAction
            -> PropertyMapping(LeftHarvest) => #24
            SubscribeSubject RightAction
            -> PropertyMapping(RightHarvest) => #26
            #20, #22, #24, #26 -> AindForceForagingDataSchema.TaskLogic.Trial(InterTrialInterval=0)
            -> Take(Count=1)
            -> MulticastSubject CurrentTrial => #29
            SubscribeSubject TrialNumber => #30
            #29, #30 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        SubscribeSubject BlockLength
        -> PropertyMapping(Count) => #21
        #19, #21 -> RepeatCount(Count=0)
        -> Last
        -> WorkflowOutput
    #14, #16, #18 -> Merge
    -> Repeat => #20
    SubscribeSubject BlockIndex
    -> Add(Operand=IntProperty(Value=1)) => #22
    SubscribeSubject BlockStatistics
    -> MemberSelector(Selector=Count) => #24
    #22, #24 -> Zip
    -> Equal => #26
    #20, #26 -> TakeUntil
    -> WorkflowOutput

Annotation(Text="")
-> GroupWorkflow VariableUpdaters
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Updaters)
    -> Take(Count=1)
    -> AsyncSubject VariableUpdaters

    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> UpdaterEvents

Defer Logging => #12
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Behavior.harp
              Extension=bin
              HarpDevice=Behavior
            -> PropertyMapping(FileName) => #5
            #1, #5 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpLickometerEvents
            -> Bonsai.Harp.GroupByRegister => #8
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Lickometer.harp
              Extension=bin
              HarpDevice=LicketySplit
            -> PropertyMapping(FileName) => #12
            #8, #12 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpClockGenEvents
            -> Bonsai.Harp.GroupByRegister => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=ClockGenerator.harp
              Extension=bin
              HarpDevice=TimestampGeneratorGen3
            -> PropertyMapping(FileName) => #19
            #15, #19 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpAnalogInputEvents
            -> Bonsai.Harp.GroupByRegister => #22
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=AnalogInput.harp
              Extension=bin
              HarpDevice=AnalogInput
            -> PropertyMapping(FileName) => #26
            #22, #26 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Behavior.harp
              Extension=bin
              HarpDevice=Behavior
            -> PropertyMapping(FileName) => #11
            #7, #11 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpLickometerCommands => #13
            SubscribeSubject HarpSeconds => #14
            #13, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #17
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Lickometer.harp
              Extension=bin
              HarpDevice=LicketySplit
            -> PropertyMapping(FileName) => #21
            #17, #21 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpClockGenCommands => #23
            SubscribeSubject HarpSeconds => #24
            #23, #24 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #27
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/ClockGenerator.harp
              Extension=bin
              HarpDevice=TimestampGeneratorGen3
            -> PropertyMapping(FileName) => #31
            #27, #31 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpAnalogInputCommands => #33
            SubscribeSubject HarpSeconds => #34
            #33, #34 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #37
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/AnalogInput.harp
              Extension=bin
              HarpDevice=AnalogInput
            -> PropertyMapping(FileName) => #41
            #37, #41 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        GroupWorkflow Render
            SubscribeSubject RendererSynchState
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #1
              Expression:
                new(
                it.FrameIndex.Value as FrameIndex,
                it.FrameTimestamp.Value as FrameTimestamp,
                it.SynchQuadValue.Value as SynchQuadValue)
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=RendererSynchState
              DeviceName=Renderer
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
              Modality=nil

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #5
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject UpdaterEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #20
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #22
            #20, #22 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #25
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #27
            #25, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #31
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
            #31, #33 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #35
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #37
            #35, #37 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #40
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #42
            #40, #42 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> MemberSelector(Selector=Head)
                -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvent

        GroupWorkflow OperationControl

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow TriggeredCameras
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #2
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterFfmpeg>) => #5
            #2 -> MemberSelector(Selector=Key) => #6
            #5, #6 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=OutputArguments)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
                -> MemberSelector(Selector=Value.Image) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #34
                #32, #34 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #12
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterOpenCv>) => #15
            #12 -> MemberSelector(Selector=Key) => #16
            #15, #16 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FourCc)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
                -> MemberSelector(Selector=Value.Image) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #34
                #32, #34 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #3
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterFfmpeg>) => #6
            #3 -> MemberSelector(Selector=Key) => #7
            #6, #7 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=OutputArguments)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector=Seconds)
                -> MemberSelector(Selector=Value) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #34
                #32, #34 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #14
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterOpenCv>) => #17
            #14 -> MemberSelector(Selector=Key) => #18
            #17, #18 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FourCc)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector=Seconds)
                -> MemberSelector(Selector=Value) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #34
                #32, #34 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=Other)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SubjectSchema
            -> AindForceForagingDataSchema.Session.SerializeToJson => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=session_output
              DeviceName=Config
              Extension=json

            SubscribeSubject TaskLogicSchema
            -> AindForceForagingDataSchema.TaskLogic.SerializeToJson => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=tasklogic_output
              DeviceName=Config
              Extension=json

            SubscribeSubject RigSchema
            -> AindForceForagingDataSchema.Rig.SerializeToJson => #11
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #13
            #11, #13 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=rig_output, DeviceName=Config, Extension=json)

            SubscribeSubject RawRigSchema => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #17
            #15, #17 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=rig_input, DeviceName=Config, Extension=json)

            SubscribeSubject RawSessionSchema => #19
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #21
            #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=session_input, DeviceName=Config, Extension=json)

            SubscribeSubject RawTaskLogicSchema => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=tasklogic_input, DeviceName=Config, Extension=json)

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
            -> AllenNeuralDynamics.Core.Logging.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=endsession, DeviceName="", Extension=json)

            SubscribeSubject RuntimeLogging
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #12
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
            #12, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #16
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            #21, #23 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #14
#12, #14 -> TakeUntil => #15
SubscribeSubject StartLogging => #16
#15, #16 -> SubscribeWhen

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

GroupWorkflow TODO
    StringProperty
    -> ReplaySubject UserComments(BufferSize=nil)
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #1
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #5
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #7
    #5, #7 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #10
    #1, #10 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #14
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #15
    #14, #15 -> Zip => #16
    #11, #16 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
